OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.5.0)
Settings
  subject_ID = 2
  event = Handitech

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 13
-> Signal Power Log
-> Channel Selector "1:3"
  Channel List = 1:3
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter
  Spatial Filter Coefficients = 1;1;1
  Number of Output Channels = 1
  Number of Input Channels = 3
  Filter matrix file =
-> Python 3 scripting
  Clock frequency (Hz) = 64
  Script = C:/Users/dtrocell/Documents/brain_kart/OpenVibe/baseline.py
Signal=#0.Signal stream -> 0x341d3912 GDF file writer
  Filename = ${Player_ScenarioDirectory}/bin/calibration_$var{subject_ID}_$var{event}-[$core{date}-$core{time}].gdf

Lua Stimulator
  Lua Script = ${Player_ScenarioDirectory}/baseline.lua
  Baseline_Duration = 60
-> Player Controller
  Stimulation name = OVTK_StimulationId_ExperimentStop
  Action to perform = Stop
