OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.5.0)
Settings
  Baseline = 40

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Temporal Filter
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 40
-> Channel Selector "1:8" => #2
  Channel List = 1:8
  Action = Select
  Channel Matching Method = Smart
Data=#2 -> Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#0.Signal stream -> Temporal Filter => #4
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 13
Data=#4 -> 0x341d3912 Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#4 -> Signal Power Log
-> Channel Selector "1:8"
  Channel List = 1:8
  Action = Select
  Channel Matching Method = Smart
-> Spatial Filter => #8
  Spatial Filter Coefficients = 1;1;1;1;1;1;1;1
  Number of Output Channels = 1
  Number of Input Channels = 8
  Filter matrix file =
Data=#8 -> 0x341d3912 Signal display
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 150
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#8 -> Simple DSP => #10
  Equation = a-$var{Baseline}
Input signal=#10 -> LSL Export (Gipsa)
  Stream name = OpenViBE Stream
  Stream type = EEG
Data=#10 -> Signal display
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 150
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#10 -> Threshold Crossing Detector
  Threshold = 2
  Cross over threshold = OVTK_StimulationId_Label_00
  Cross under threshold = OVTK_StimulationId_Label_01
  Channel Index = 1
-> Stimulation listener
  Log level to use = Information
Input signal=#10 -> 0x341d3912 LSL Export
  Signal stream = openvibeSignal
  Marker stream = openvibeMarkers

0x341d3912 Signal display
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
