OpenViBE-Scenario(FormatVersion=2, Creator=OpenViBE Designer, CreatorVersion=3.5.0)

Acquisition client => #0
  Acquisition server hostname = ${AcquisitionServer_HostName}
  Acquisition server port = 1024
#0.Signal stream -> Channel Selector "1:3" => #1
  Channel List = 1:3
  Action = Select
  Channel Matching Method = Smart
-> Temporal Filter => #2
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 1
  High Cut-off Frequency (Hz) = 40
Data=#2 -> Signal display "Signal brut"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
#1 -> Temporal Filter => #4
  Filter Type = Band Pass
  Filter Order = 4
  Low Cut-off Frequency (Hz) = 8
  High Cut-off Frequency (Hz) = 13
-> Signal Power Log
-> Spatial Filter => #6
  Spatial Filter Coefficients = 1;1;1
  Number of Output Channels = 1
  Number of Input Channels = 3
  Filter matrix file =
Data=#6 -> Signal display "Vitesse"
  Display Mode = Scan
  Auto vertical scale = None
  Scale refresh interval (secs) = 5
  Vertical Scale = 150
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
Data=#4 -> Signal display "Signal filtré dans les bandes alpha"
  Display Mode = Scan
  Auto vertical scale = Per channel
  Scale refresh interval (secs) = 5
  Vertical Scale = 100
  Vertical Offset = 0
  Time Scale = 10
  Bottom ruler = true
  Left ruler = false
  Multiview = false
